PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Gender': u'female', u'Handedness': u'Right', u'participant': u'100'}
  Save csv file = True
  expName = Rosvold CPT
  logging level = debug
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine Welcome_Nback
    ImageComponent Nback_Instructions
      stopVal [frame N] = $instrStopTime2
      durationEstim = 30
      startEstim = 0
      startVal [frame N] = 0
      image = N-back Instructions.jpg
      size = [1.125, 1.5]
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    KeyboardComponent Trigger_Nback_Instructions
      stopVal [frame N] = $instrStopTime2
      durationEstim = 30
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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  Routine Welcome_CPT_AX
    TextComponent Instructions_CPT_AX
      stopVal [frame N] = $instrStopTime-120
      durationEstim = 20
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.1
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      text:
        This time press button 1 as quickly as you can when you see the letter X if it comes after letter A. Do not hit the button on letter A, only on letter X when it comes AFTER letter A.

        This screen will be up for 20 seconds.
    KeyboardComponent Trigger_CPT_AX_Instructions
      stopVal [frame N] = $instrStopTime
      durationEstim = 22
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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  Routine Nback_Stimulus
    TextComponent Letter_Nback
      text [set every repeat] = $letters
      stopVal [frame N] = 60
      durationEstim = 1
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = .5
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    KeyboardComponent Response_Nback
      correctAns = $correctButton
      storeCorrect = True
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      allowedKeys [set every repeat] = '1'
      startVal [frame N] = 0
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    KeyboardComponent Trigger_Nback_Stimulus
      correctAns = 'num_multiply'
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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    CodeComponent Nback_Code
      Begin Experiment:
        Nback_responseList = []
        Nback_correctList = []
        Nback_accuracy = []
        Nback_responseTimeList = []
      End Routine:
        Nback_responseList.append(Response_Nback.keys)
        print 'Response_Nback.keys = %s' % Response_Nback.keys
        print 'Nback_responseList = %s' % Nback_responseList
        Nback_correctList.append(Response_Nback.corr)
        if len(Nback_accuracy) > 0:
            Nback_accuracy.append(sum(Nback_correctList)/len(Nback_correctList))
        else:
            Nback_accuracy.append(Response_Nback.corr)
        if Response_Nback.keys != None:  # we had a response
            Nback_responseTimeList.append(Response_Nback.rt)
        else:
            Nback_responseTimeList.append(0)
      End Experiment:
        Nback_responseListTotal = len([elem for elem in Nback_responseList if elem == '1'])
        Nback_correctList_Total = sum(Nback_correctList)
        Nback_responseTimeList_Average = (sum(Nback_responseTimeList)/len(elem for elem in Nback_responseTimeList if elem != 0))
        csvDictionary = {'Nback_letters': oldLets, 'correctButton':correctButtonList, 'Response':Nback_responseList, 'Correct':Nback_correctList, 'Accuracy':Nback_accuracy, 'Response_Time':Nback_responseTimeList}
        finalLine = {'CPT_AX_letters': 'Total:', 'correctButton':'-'*5, 'Response':Nback_responseListTotal, 'Correct':Nback_correctList_Total, 'Accuracy':'Average:', 'Response_Time':Nback_responseTimeList_Average}
        writeDataFile(csvDictionary, '%s_Nback_results' % expInfo['participant'], ['Nback_letters', 'correctButton', 'Response', 'Correct', 'Accuracy', 'Response_Time'], finalLine)
  Routine CPT_AX
    TextComponent Letter_CPT_AX
      text [set every repeat] = $CPT_letters
      stopVal [frame N] = 6
      durationEstim = .1
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = .5
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    KeyboardComponent Response_CPT_AX_X
      correctAns = $correctButton
      storeCorrect = True
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      allowedKeys [set every repeat] = '1'
      startVal [frame N] = 0
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    KeyboardComponent Response_CPT_AX_A
      correctAns = $corAns
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = '1'
      startVal [frame N] = 0
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    KeyboardComponent Trigger_CPT_AX_Stimuls
      correctAns = 'num_multiply'
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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    CodeComponent CPT_AX_Code
      Begin Experiment:
        CPT_AX_responseList = []
        CPT_AX_responseToAList = []
        CPT_AX_correctList = []
        CPT_AX_accuracy = []
        CPT_AX_responseTimeList = []
      End Routine:
        CPT_AX_responseList.append(Response_CPT_AX_X.keys)
        CPT_AX_correctList.append(Response_CPT_AX_X.corr)
        if (Response_CPT_AX_X.corr == 0) and (CPT_letters == 'A'):
            CPT_AX_responseToAList.append(1)
        else:
            CPT_AX_responseToAList.append(0)
        if len(CPT_AX_accuracy) > 0:
            CPT_AX_accuracy.append(sum(CPT_AX_correctList)/len(CPT_AX_correctList))
        else:
            CPT_AX_accuracy.append(Response_CPT_AX_X.corr)
        if Response_CPT_AX_X.keys != None:  # we had a response
            CPT_AX_responseTimeList.append(Response_CPT_AX_X.rt)
        else:
            CPT_AX_responseTimeList.append(0)
      End Experiment:
        CPT_AX_responseListTotal = len([elem for elem in CPT_AX_responseList if elem == '1'])
        CPT_AX_correctList_Total = sum(CPT_AX_correctList)
        CPT_AX_responseToAList_Total = sum(CPT_AX_responseToAList)
        CPT_AX_responseTimeList_Average = (sum(CPT_AX_responseTimeList)/len([elem for elem in CPT_AX_responseTimeList if elem > 0]))
        csvDictionary = {'CPT_AX_letters': list2[1:10], 'correctButton':buttonList2[1:10], 'Response':CPT_AX_responseList, 'Response_To_A':CPT_AX_responseToAList, 'Correct':CPT_AX_correctList, 'Accuracy':CPT_AX_accuracy, 'Response_Time':CPT_AX_responseTimeList}
        finalLine = {'CPT_AX_letters': 'Total:', 'correctButton':'-'*5, 'Response':CPT_AX_responseListTotal, 'Response_To_A': CPT_AX_responseToAList_Total,'Correct':CPT_X_correctList_Total, 'Accuracy':'Average:', 'Response_Time':CPT_X_responseTimeList_Average}
        writeDataFile(csvDictionary, '%s_CPT_AX_results' % expInfo['participant'], ['CPT_AX_letters', 'correctButton', 'Response', 'Response_To_A', 'Correct', 'Accuracy', 'Response_Time'], finalLine)
  Routine AreYouSure
    TextComponent Warning
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        After this point we won't stop the experiment, unless there is a problem.

        Are you sure you are ready? If so, press space bar.
    KeyboardComponent Next_Slide_Warning
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Start
    TextComponent Welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the Biomarker Imaging Study

        Press any button when ready to continue
    KeyboardComponent Next_Slide
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent Initilization_Code
      Begin Experiment:
        '''
        Total time to record MRI sequence:
            Seconds: 2196.44
            Minutes: 36.60733~
        '''
        ###################SETTINGS######################
        ###################SETTINGS######################
        ###################SETTINGS######################
        ###################SETTINGS######################
        #should be 1320 (1320 frames = 22 seconds @ 60Hz refresh rate)
        instrStopTime = 12
        #should be 1800 (1800 frames = 30 seconds @ 60Hz refresh rate)
        instrStopTime2 = 18
        #set this to whatever button is recorded on a trigger pulse,
        # wrapped in apostrophes and seperated by commas for multiple
        # buttons( e.g.: '6','^')
        triggerButton = 'num_multiply', '8', '*'
        ###################SETTINGS######################
        ###################SETTINGS######################
        ###################SETTINGS######################
        ###################SETTINGS######################
        #
        #################################################
        ####################CSV Code#####################
        def writeDataFile(csvDict, csvFileName, fieldNames, finalLine = {}):
            print csvDict, fieldNames
            with open('%s.csv' % csvFileName, 'wb') as outfile:
                writer = csv.DictWriter(outfile, fieldnames = fieldNames)
                writer.writeheader()
                print 'header written'
                rowList = []
                for i in range(len(csvDict[fieldNames[0]])):
                    rowDict = {}
                    for key in csvDict.keys():
                        try:
                            rowDict[key] = csvDict[key][i]
                        except:
                            pass
                    rowList.append(rowDict)
                if finalLine != {}:
                    rowList.append(finalLine)
                writer.writerows(rowList)
        ####################CSV Code#####################
        #################################################
        #
        #################################################
        #################N-Back Code#####################
        import csv
        ########
        iRanWhat= 0
        continueRunning = True
        while continueRunning:
            corAns = 'none'
            nBackLetter = 'A'
            currentLetter = 'A'
            oldLets = []
            correctButtonList = []
            nBackLets = []
            position=0
            correctAns= 0
            nBack = 2
            #array of letters to sample from
            nBackLets = map(chr, range(65, 91))
            counter = 0
            howManyTimes = 10
            while(position<howManyTimes):
               #pick random number from 1-100 for determining if this is an nBack round or not
               bias = randint(1, 100)
               currentLetter = nBackLets[randint(0,25)]
               #check that enough rounds have passed to display an nBack
               if position-nBack >= 0:
                  #determine if next letter will be new or a nBack match, currently 50/50 odds
                  if bias < 50:
                     currentLetter = oldLets[position-nBack]
                     corAns = '1'
                     counter += 1
                  else:
                     corAns = 'none'
               # update component parameters for each repeat
               correctButtonList.append(corAns)
               oldLets.append(currentLetter)
               position = position + 1
            iRanWhat += 1
            if counter == (howManyTimes/2):
                print "nbacks = %d" % counter
                continueRunning = False
                #load dictionary to write to csvDictionary
                print oldLets
                print correctButtonList
                csvDictionary = {'letters': oldLets, 'correctButton':correctButtonList}
                print csvDictionary

        writeDataFile(csvDictionary, 'NbackStimOrder', ['letters', 'correctButton'])

        print "It took %d runs to get this perfect set." % iRanWhat
        ##################N-Back Code####################
        #################################################
        #
        #################################################
        ####################CPT Code#####################
        ##RANDOMIZATION OF STIMULI#####
        ###Randomization of X trials###
        list1 = []
        list2 = []
        buttonList1 = []
        buttonList2 = []
        currentLetter = "X"
        #array of letters to sample from
        lets = map(chr, range(65, 91))
        del lets[23]####Delete X from the list
        xPoolOfLetters = ["X" for i in range(100)]
        xPoolOfLetters = xPoolOfLetters + (8 * lets)
        for i in range(12):
            xPoolOfLetters.append(lets[randint(0,24)])
        print len(xPoolOfLetters)
        ######Randomization of A-X trials
        aCurrentLetter = "A"
        print 'length of lets:', len(lets)
        aLets = lets
        print 'length of alets:', len(aLets)
        del aLets[0]
        ############for ax, I'll just load the list with A's,
        ############and after sorting insert X after each A in the list
        axPoolOfA = ["A" for i in range(100)]
        axPoolOfLetters = []
        axPoolOfLetters = axPoolOfLetters + (4 * aLets)
        for i in range(16):
            axPoolOfLetters.append(aLets[randint(0,23)])
        shuffle(axPoolOfLetters)
        print len(axPoolOfLetters)

        def xRandomizer(pol):
            repeatAttempt = False
            for x in range(0,len(pol)):
                if x > 2:
                    if pol[x] == pol[x-1]:
                        if pol[x] == pol[x-2]:
                            if pol[x] == pol[x-3]:
                                shuffle(pol)
                                repeatAttempt = True
                                break
            if repeatAttempt == True:
                xRandomizer(pol)
            perfectPool = list(pol)
            print len(perfectPool)
            return perfectPool

        def axRandomizer(apoa, apol):
            repeatAttempt = False
            newApol = []
            otherLetters = 0
            aLetters = 0
            totalLength = len(apol)+len(apoa)
            backup1 = list(apoa)
            backup2 = list(apol)
            for x in range(0,totalLength):
                seed = randint(0,2)
                if seed == 0 and apol != []:
                    aLetters = 0
                    otherLetters += 1
                    if x % 2 == 0:
                        oLL = 2
                    else:
                        oLL = 3
                    if otherLetters > oLL:
                        otherLetters = 0
                        if apoa == []:
                            newApol.append(apol.pop())
                        else:
                            newApol.append(apoa.pop())
                            aLetters += 1
                    else:
                        newApol.append(apol.pop())
                elif seed == 1 and apoa != []:
                    aLetters += 1
                    otherLetters = 0
                    if aLetters > 2:
                        aLetters = 0
                        if apol == []:
                            newApol.append(apoa.pop())
                        else:
                            newApol.append(apol.pop())
                            otherLetters += 1
                    else:
                        newApol.append(apoa.pop())
                else:
                    if apol == []:
                        if totalLength - len(newApol) > 5:
                            repeatAttempt = True
                            break
                        else:
                            newApol.append(apoa.pop())
                    elif apoa == []:
                        newApol.append(apol.pop())
            if repeatAttempt == True:
                axRandomizer(backup1, backup2)
            else:
                for x in range(0, len(newApol)+100):
                    if newApol[x] == 'A':
                        newApol.insert(x+1,'X')
            perfectPool = list(newApol)
            print len(perfectPool)
            return perfectPool

        list1 = xRandomizer(xPoolOfLetters)
        a = list(axPoolOfA)
        l = list(axPoolOfLetters)
        list2 = axRandomizer(a, l)
        #print "list1 = ", list1
        #print "list2 = ", list2
        def createButtonLists(alist):
            abuttonlist = []
            for i in alist:
                if i is 'X':
                    abuttonlist.append('1')
                else:
                    abuttonlist.append('none')
            return abuttonlist
        buttonList1 = createButtonLists(list1)
        buttonList2 = createButtonLists(list2)
        #print buttonList1
        #print buttonList2
        csvDictionary = {'CPT_letters': list1[1:10], 'correctButton':buttonList1[1:10]}
        writeDataFile(csvDictionary, 'CPTstimOrder1', ['CPT_letters', 'correctButton'])
        csvDictionary = {'CPT_letters': list2[1:10], 'correctButton':buttonList2[1:10]}
        writeDataFile(csvDictionary, 'CPTstimOrder2', ['CPT_letters', 'correctButton'])
        ####################CPT Code#####################
        #################################################
  Routine Welcome_CPT_X
    TextComponent Instructions_CPT_X
      stopVal [frame N] = $instrStopTime-120
      durationEstim = 20
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.1
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      text:
        In this task, letters will be presented rapidly on the screen one at a time. Anytime you see the letter X, press button 1 as quickly as you can. Only press when you see letter X.

        This screen will be up for 20 seconds.
    KeyboardComponent Trigger_CPT_X_Instructions
      stopVal [frame N] = $instrStopTime
      durationEstim = 22
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0.0
      store = all keys
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  Routine Nback_Fixation
    TextComponent Fixation_Nback
      text = +
      stopVal [frame N] = 60
      durationEstim = 1
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.1
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    KeyboardComponent Trigger_Nback_Fixation
      correctAns = 'num_multiply','8'
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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  Routine MRI_sync
    TextComponent Waiting_For_Pulse
      text = Waiting for trigger pulse...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent Pulse_Next_Slide
      correctAns = 'num_multiply'
      forceEndRoutine = True
      allowedKeys [set every repeat] = triggerButton
      startVal [time (s)] = 0.0
      store = all keys
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  Routine End
    TextComponent GoodBye
      text = Thank you, the study is complete. Please wait patiently for the technician to assist you out of the MRI.
      stopVal [frame N] = $instrStopTime
      durationEstim = 20
      startVal [frame N] = 0.0
      letterHeight = 0.1
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  Routine CPT_X
    TextComponent Letter_CPT_X
      text [set every repeat] = $CPT_letters
      stopVal [frame N] = 6
      durationEstim = .1
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.5
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    KeyboardComponent Response_CPT_X_X
      correctAns = $correctButton
      storeCorrect = True
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      allowedKeys [set every repeat] = '1'
      startVal [frame N] = 0
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    KeyboardComponent Trigger_CPT_X_Stimulus
      correctAns = 'num_multiply'
      stopVal [frame N] = 60
      durationEstim = 1
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys [set every repeat] = triggerButton
      startVal [frame N] = 0
      store = all keys
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    CodeComponent CPT_X_Code
      Begin Experiment:
        CPT_X_responseList = []
        CPT_X_correctList = []
        CPT_X_accuracy = []
        CPT_X_responseTimeList = []
      End Routine:
        print 'Response_CPT_X_X.keys = %s' % Response_CPT_X_X.keys
        CPT_X_responseList.append(Response_CPT_X_X.keys)
        print 'CPT_X_responseList = %s' % CPT_X_responseList
        CPT_X_correctList.append(Response_CPT_X_X.corr)
        if len(CPT_X_accuracy) > 0:
            CPT_X_accuracy.append(sum(CPT_X_correctList)/len(CPT_X_correctList))
        else:
            CPT_X_accuracy.append(Response_CPT_X_X.corr)
        if Response_CPT_X_X.keys != None:  # we had a response
            CPT_X_responseTimeList.append(Response_CPT_X_X.rt)
        else:
            CPT_X_responseTimeList.append(0)
      End Experiment:
        CPT_X_responseListTotal = len([elem for elem in CPT_X_responseList if elem == '1'])
        CPT_X_correctList_Total = sum(CPT_X_correctList)
        CPT_X_responseTimeList_Average = (sum(CPT_X_responseTimeList)/len([elem for elem in CPT_X_responseTimeList if elem != 0]))
        csvDictionary = {'CPT_X_letters': list1[1:10], 'correctButton':buttonList1[1:10], 'Response':CPT_X_responseList, 'Correct':CPT_X_correctList, 'Accuracy':CPT_X_accuracy, 'Response_Time':CPT_X_responseTimeList}
        finalLine = {'CPT_X_letters': 'Total:', 'correctButton':'-'*5, 'Response':CPT_X_responseListTotal, 'Correct':CPT_X_correctList_Total, 'Accuracy':'Average:', 'Response_Time':CPT_X_responseTimeList_Average}
        writeDataFile(csvDictionary, '%s_CPT_X_results' % expInfo['participant'], ['CPT_X_letters', 'correctButton', 'Response', 'Correct', 'Accuracy', 'Response_Time'], finalLine)
Flow
  Routine Start
  Routine AreYouSure
  Routine MRI_sync
  Routine Welcome_CPT_X
  LoopInitiator CPT_X_Trials loopType="TrialHandler"
    conditionsFile = CPTstimOrder1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CPT_letters': 'N', 'correctButton': 'none'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'S', 'correctButton': 'none'},
      {'CPT_letters': 'H', 'correctButton': 'none'},
      {'CPT_letters': 'F', 'correctButton': 'none'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'H', 'correctButton': 'none'}]
    Routine CPT_X
  LoopTerminator CPT_X_Trials
  Routine Welcome_CPT_AX
  LoopInitiator CPT_AX_Trials loopType="TrialHandler"
    conditionsFile = CPTstimOrder2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'A', 'correctButton': 'none'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'M', 'correctButton': 'none'},
      {'CPT_letters': 'A', 'correctButton': 'none'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'A', 'correctButton': 'none'},
      {'CPT_letters': 'X', 'correctButton': '1'},
      {'CPT_letters': 'M', 'correctButton': 'none'}]
    Routine CPT_AX
  LoopTerminator CPT_AX_Trials
  Routine Welcome_Nback
  LoopInitiator Nback_Trials loopType="TrialHandler"
    conditionsFile = NbackStimOrder.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letters': 'L', 'correctButton': 'none'},
      {'letters': 'R', 'correctButton': 'none'},
      {'letters': 'G', 'correctButton': 'none'},
      {'letters': 'R', 'correctButton': '1'},
      {'letters': 'C', 'correctButton': 'none'},
      {'letters': 'R', 'correctButton': '1'},
      {'letters': 'C', 'correctButton': '1'},
      {'letters': 'R', 'correctButton': '1'},
      {'letters': 'W', 'correctButton': 'none'},
      {'letters': 'R', 'correctButton': '1'}]
    Routine Nback_Fixation
    Routine Nback_Stimulus
  LoopTerminator Nback_Trials
  Routine End
