PsychoPy2experiment version="1.82.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Gender': u'female', u'Handedness': u'Right', u'participant': u'100'}
  Save csv file = True
  expName = Rosvold CPT
  logging level = debug
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine RestingState
    TextComponent text_10
      stopVal [frame N] = 600
      durationEstim = 10
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.1
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      text:
        Please focus on the crosshair and relax while being scanned. This will last ten minutes.

        This screen will be up for 10 seconds.
    TextComponent text_11
      text = +
      stopVal [frame N] = 36600
      durationEstim = 610
      startEstim = 10
      startVal [frame N] = 600
      letterHeight = 0.1
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  Routine end
    TextComponent text_9
      text = Thank you, the resting state portion is complete.
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    TextComponent Welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the Biomarker Imaging Study

        Press any button when ready to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MRI_sync_2
    TextComponent text_13
      text = Waiting for trigger pulse...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_16
      correctAns = 'num_multiply'
      forceEndRoutine = True
      allowedKeys = 'num_multiply','8'
      startVal [time (s)] = 0.0
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  Routine AreYouSure_
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        After this point we won't stop the experiment, unless there is a problem.

        Are you sure you are ready? If so, press space bar.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine AreYouSure_
  Routine MRI_sync_2
  Routine RestingState
  Routine end
